PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = exp1
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = all keys
      storeCorrect = True
      syncScreenRefresh = False
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    ImageComponent image
      image = stimuli\Presentation2.jpg
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine feedback
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if not key_resp.keys :
            msg="Failed to respond"
        elif key_resp.corr:#stored on last run routine
            msg=correct_reward
        else:
            msg=wrong_reward
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine exp_break
    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if trials.thisN != 10:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have completed half the experiment.

        Well done! You can now take a break.

        Please press the space bar to resume.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine gen_conditions
    CodeComponent code_4
      Code Type = Py
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      Before Experiment:
        import pandas as pd
      Begin Routine:
        p_stay = 0.4
        p_switch = 0.6
        high_reward = np.arange(4, 9.1, 0.1)
        low_reward = np.arange(0, 5.1, 0.1)
        N = 20 # number of trials
        block_size = 5
        correct_cue = np.full((N+block_size,1), 0)
        reward = np.full((N+block_size,2), 0.0) # rewards for choosing cue 1 or 2 on each trial

        state = np.random.choice([1, 2], p = [0.5, 0.5]) # initialise randomly
        correct_cue = np.full((N+block_size,), 0)
        reward = np.full((N+block_size,2), 0.0) # rewards for choosing cue 1 or 2 on each trial

        i=0

        while i < N :

            # generating reward and next state based on current state
            if state == 1:

                correct_cue[i:i+block_size] = 1
                reward[i:i+block_size,0] = np.random.choice(high_reward, size=block_size)
                reward[i:i+block_size,1] = np.random.choice(low_reward, size=block_size)
                state = np.random.choice([1,2], p = [p_stay, p_switch])

            elif state == 2:

                correct_cue[i:i+block_size] = 2 # correct cue is 2 which gives higher reward
                reward[i:i+block_size,0] = np.random.choice(low_reward, size=block_size) # low reward for cue 1
                reward[i:i+block_size,1] = np.random.choice(high_reward, size=block_size) # high reward for cue 2
                state = np.random.choice([1,2], p = [p_switch, p_stay])

            i = i+block_size

        correct_keys = np.where(correct_cue[:N] == 1, "[\'left\']", "[\'right\']").reshape(N,1)
        correct_reward = np.where(correct_cue[:N] == 1, reward[:N,0], reward[:N,1]).reshape(N,1) # reward on corrcet ans
        wrong_reward = np.where(correct_cue[:N] == 1, reward[:N,1], reward[:N,0]).reshape(N,1) # reward on wrong ans
        reward_data = pd.DataFrame(np.hstack((correct_keys, np.round(correct_reward,2), np.round(wrong_reward,2))),
                      columns = ['correctAns', 'correct_reward', 'wrong_reward'], dtype = object)

        reward_data.to_csv(expInfo['participant']+'_'+expInfo['session']+'_reward.csv', index=False)
  Routine highlight
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine highlight_door
    ImageComponent image_2
      image = stimuli\Presentation2.jpg
      opacity = 0.5
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = black
      lineWidth = 3
      pos = (0.5, -0.1)
      saveStartStop = False
      shape = rectangle
      size = (0.5, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine gen_conditions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $expInfo['participant']+'_'+expInfo['session']+'_reward.csv'
    loopType = sequential
    nReps = 1
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    Routine exp_break
    Routine trial
    Routine highlight_door
    Routine feedback
  LoopTerminator trials
