PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = exp1
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Routines
  Routine gen_conditions
    CodeComponent code_4
      Code Type = Py
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      Before Experiment:
        import pandas as pd
  Routine highlight
    PolygonComponent polygon
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine highlight_door
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if key_resp.keys == ['left'] :
            highlight = highlight_left_choice
        elif key_resp.keys == ['right'] :
            highlight = highlight_right_choice
        else :
            highlight = background
    ImageComponent image_2
      image [set every repeat] = $highlight
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine exp_break
    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if trials.thisN != 89:
            continueRoutine = False
  Routine task_break
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have completed half the experiment.

        Well done! You can now take a break.

        Please press the space bar to resume.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correctAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = all keys
      storeCorrect = True
      syncScreenRefresh = False
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    ImageComponent image
      image [set every repeat] = $background
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine task_type
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $message
  Routine feedback_points
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if condsFile == 'points_positive_task.csv':

            if not key_resp.keys :
                msg="Failed\n to respond"
            elif key_resp.corr:#stored on last run routine
                msg=positive_arm
            else:
                msg=neutral_arm

        elif condsFile == 'images_positive_task.csv':
            msg = "Failed"
            continueRoutine = False
            routineForceEnded = True
    ImageComponent image_3
      image [set every repeat] = $feedback_background
      saveStartStop = False
      size [set every repeat] = $background_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text
      color = black
      letterHeight = 0.1
      pos = (-0.08, -0.04)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine feedback_images
    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        if condsFile == 'images_positive_task.csv':

            if not key_resp.keys :
                img= 'background/frame.png'
            elif key_resp.corr:#stored on last run routine
                img=positive_arm
            else:
                img=neutral_arm

        elif condsFile == 'points_positive_task.csv':
            img= 'background/frame.png'
            continueRoutine = False
            routineForceEnded = True
    ImageComponent image_4
      image [set every repeat] = $feedback_background
      saveStartStop = False
      size [set every repeat] = $background_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_5
      image [set every repeat] = $img
      saveStartStop = False
      size = (0.85,0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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Flow
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = choose_task.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condsFile': 'points_positive_task.csv'},
      {'condsFile': 'images_positive_task.csv'}]
    Routine task_type
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine highlight_door
      Routine feedback_points
      Routine feedback_images
    LoopTerminator trials
  LoopTerminator block
  Routine exp_break
  Routine task_break
