PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Fear_rating
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimuli
      saveStartStop = False
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Intro
    TextComponent text_1
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see some images and subsequently rate how you feel about the image.

        Press SPACE to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
    TextComponent text_10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = The actual experiment will begin now. Press SPACE to start.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction_2
    TextComponent text_9
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        You will be able to indicate your ratings on scales as shown below. Simply click your pointer on the desired rating.
    TextComponent text_13
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = ratings.png
      size = (0.9, 0.6)
      startVal [time (s)] = 0.0
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  Routine Instruction_1
    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        You will be shown images like the ones below:
    ImageComponent example_pic1
      image = C:\Users\csahi\work & study\probabilistic learning\visual rewards\stimuli\matched_images\SHINE_color_cielab_dead_animals2.jpg
      pos = (0.3, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent example_pic2
      image = C:\Users\csahi\work & study\probabilistic learning\visual rewards\stimuli\matched_images\SHINE_color_cielab_erotic_females14.jpg
      pos = (-0.3, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = You will then be asked to rate how you feel about  the image on a scale
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_form
  Routine instruction_check
    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = .csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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  Routine rating
    ImageComponent image_4
      image [set every repeat] = $stimuli
      pos = (-0.7, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.03
      pos = (-0.2, 0.4)
      startVal [time (s)] = 0.0
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      text:
        How arousing is the image
        on a scale from 1 to 9?
    ImageComponent image_2
      image = arousal_rating.png
      pos = (-0.2, 0.3)
      size = (0.5, 0.12)
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.02
      pos = (-0.2, 0.2)
      saveStartStop = False
      size = (0.4, 0.036)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    TextComponent text_11
      letterHeight = 0.03
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
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      text:
        How pleasant is the image
         on a scale from 1 to 9?
    ImageComponent image_3
      image = valence_rating.png
      pos = (0.5, 0.30)
      size = (0.5, 0.12)
      startVal [time (s)] = 0.0
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.02
      pos = (0.5, 0.2)
      saveStartStop = False
      size = (0.4, 0.036)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    TextComponent text
      letterHeight = 0.03
      pos = (-0.2, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How artistic do you find the picture
        on a scale from 1 to 9?
    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.03
      pos = (-0.2, -0.05)
      saveStartStop = False
      size = (0.4, 0.036)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_4
      letterHeight = 0.03
      pos = (0.5, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        How complex do you find this picture
        on a scale from 1 to 9?
    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.02
      pos = (0.5, -0.05)
      saveStartStop = False
      size = (0.4, 0.036)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_12
      letterHeight = 0.03
      pos = (0.15, -0.2)
      startVal [time (s)] = 0.0
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      text:
        How much do you like the image
        in general on a scale from 1 to 9?
    SliderComponent slider_7
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0.15, -0.3)
      size = (0.4, 0.036)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_14
      letterHeight = 0.03
      pos = (0.15, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE after rating to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rating2
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.02
      pos = (0, 0.35)
      saveStartStop = False
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_2
      letterHeight = 0.04
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
      text = How aesthetic do you find this picture?
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    SliderComponent slider_4
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.02
      pos = (0, 0.1)
      saveStartStop = False
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text:
        How complex do you find this picture?
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine Instruction_1
  Routine Instruction_2
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
    random seed = 1
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    conditions:
      [OrderedDict([('image', 'stimuli/SHINEd_hface1.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface10.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface2.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface3.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface4.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface5.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface6.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface7.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface8.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface9.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand1.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand10.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand2.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand3.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand4.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand5.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand6.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand7.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand8.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand9.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface1.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface10.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface2.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface3.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface4.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface5.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface6.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface7.png')])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
    Routine trial
    Routine rating
  LoopTerminator trials
